<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.ML.Torch.NeuralNets;assembly=Bonsai.ML.Torch"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:gestures="clr-namespace:GestureRecognition;assembly=GestureRecognition"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:LoadScriptModule">
          <p1:ModelPath>weights\YOLOv10n_gestures.torchscript</p1:ModelPath>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Model</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Image</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gestures:Preprocess" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Model</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Model" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Forward" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gestures:GestureData">
          <gestures:ConfidenceThreshold>0.6</gestures:ConfidenceThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Gestures</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Model</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Gestures</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping">
        <VisualizerType xsi:type="TypeMapping" TypeArguments="gestures:GestureVisualizer" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Image</Name>
      </Expression>
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Text>GestureDetection</ui:Text>
        <ui:Visible>true</ui:Visible>
        <ui:Location xsi:nil="true" />
        <ui:Size xsi:nil="true" />
        <ui:WindowState xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>